CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:NADH
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:NADH
    Name the output image:NADHRescale
    Rescaling method:Divide by the image's maximum
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:NADHRescale
    Name the objects to be identified:Cells

IdentifyObjectsManually:[module_num:7|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
    Select the input image:NADHRescale
    Name the objects to be identified:Nuclei

IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Cells
    Name the output image:cellsimage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cytoplasm
    Name the output image:cytoplasmimage
    Select the color format:Grayscale
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:cellsimage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\TrainingGina\\test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:cytoplasmimage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cyto
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\TrainingGina\\test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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