CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "photons")
    Name to assign these images:NADH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:mCherry
    Name the output image:ToxoRescale
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:0.005
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    Intensity range for the output image:0.0,1.0
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
Threshold:[module_num:6|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
    Select the input image:ToxoRescale
    Name the output image:Toxothreshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Toxothreshold
    Name the primary objects to be identified:ToxoObj
    Typical diameter of objects, in pixel units (Min,Max):8,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayObjects:[module_num:8|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
    Input:ToxoRescale
    Name the output image:OverlayObjects
    Objects:ToxoObj
    Opacity:0.3

RescaleIntensity:[module_num:9|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
    Select the input image:NADH
    Name the output image:NADHRescale
    Rescaling method:Divide by the image's maximum
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:ToxoObj
    Name the output image:Toxoplasma
    Select the color format:Grayscale
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADHRescale
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ToxoObj

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:Toxoplasma
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_toxo
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\01-22-2020
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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