CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:red
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:red
    Name the output image:redRescale
    Rescaling method:Divide by the image's maximum
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:redRescale
    Name the objects to be identified:toxoobj

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:toxoobj
    Name the output image:LabelImage
    Select the color format:Grayscale
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:LabelImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_toxo
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Work\\TrainingGina\\03-11-2020
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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