CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "photons")
    Name to assign these images:NADH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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enabled:False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
    Select the input image:mCherry
    Name the output image:ToxoRescale
    Rescaling method:Divide by the image's maximum
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
Threshold:[module_num:6|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enabled:False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
    Select the input image:ToxoRescale
    Name the output image:Toxothreshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:20
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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enabled:False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
    Select the input image:Toxothreshold
    Name the primary objects to be identified:ToxoObj
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayOutlines:[module_num:8|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ToxoRescale
    Name the output image:toxooutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ToxoObj

RescaleIntensity:[module_num:9|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
    Select the input image:NADH
    Name the output image:NADHRescale
    Rescaling method:Divide by the image's maximum
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
IdentifyObjectsManually:[module_num:10|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
    Select the input image:NADHRescale
    Name the objects to be identified:Cells

ConvertObjectsToImage:[module_num:11|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enabled:False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
    Select the input objects:ToxoObj
    Name the output image:Toxoplasma
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:Grayscale
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
OverlayOutlines:[module_num:13|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NADHRescale
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ToxoObj
    Select outline color:Green
    Select objects to display:Cells

SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Toxoplasma
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_toxo
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\ktweed\\Desktop\\DATA\\03182019
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NADH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\ktweed\\Desktop\\03182019
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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